begintemplate Ib2
public soma, axon, presyn, connect2target, spgenIbFl

create soma, axon
objectvar presyn[2]
objref spgenIbFl

proc init() {local i
    ndend = 1          

    soma_diam = 10    
    soma_len = 10      
    soma_nseg = 1
    soma_cm = 2
    soma_Ra = 200     

    axon_diam = 2      
    axon_len = 350 + $1
    axon_nseg = 50 
    axon_cm = 2
    axon_Ra = 0.002         

    create soma, axon  

    soma {
    nseg = soma_nseg    
    diam = soma_diam    
    L = soma_len 
    cm = soma_cm
    Ra = soma_Ra  
    insert hh     

    pt3dclear()
    pt3dadd(280,50,$1*5,soma_diam) 
    pt3dadd(280-soma_len,50,$1*5,soma_diam) 
    }

    axon {
    nseg = axon_nseg    
    diam = axon_diam    
    L = axon_len 
    cm = axon_cm
    Ra = axon_Ra
    insert hh
    pt3dclear()     
    pt3dadd(280,50,$1*5,axon_diam) 
    pt3dadd(280+axon_len,50,$1*5,axon_diam) 
    }

    spgenIbFl = new SpikeGenerator(0.8)
        spgenIbFl.freq = $2
        spgenIbFl.start = 1
        spgenIbFl.number = 1000000000
        spgenIbFl.noise = 0.2 

    connect axon(1), soma(0)    
}


obfunc connect2target() { localobj nc
    nc = new NetCon(spgenIbFl, $o1)
    if (numarg() == 2) { $o2 = nc }
    return nc
}
endtemplate Ib2