load_file("nrngui.hoc")
nMN = 169       /* The number of cells */
nInt = 196
nAff = 120
nSens = 100
nRC = 196
nIP = 120
nsyn = 100
ncell = nMN+2*nInt+2*nAff+nRC
FLncells = 2*ncell+nSens+nSens+nIP+nIP+2
SLncell = 20

objref cells, nil, nc
cells = new List()


{load_file("./templates/Ia.hoc")}
{load_file("./templates/Ib.hoc")}
{load_file("./templates/IbintE.hoc")}
{load_file("./templates/IbintF.hoc")}
{load_file("./templates/IaintE.hoc")}
{load_file("./templates/IaintF.hoc")}
{load_file("./templates/IP0.hoc")}
{load_file("./templates/IP1.hoc")}
{load_file("./templates/sens0.hoc")}
{load_file("./templates/sens1.hoc")}
{load_file("./templates/MNE.hoc")}
{load_file("./templates/MNF.hoc")}
{load_file("./templates/EES.hoc")}
{load_file("./templates/RcF.hoc")}
{load_file("./templates/RcE.hoc")}
{load_file("./templates/ex.hoc")}
{load_file("./templates/inh.hoc")}
{load_file("./templates/sensorygen.hoc")}
{load_file("save.hoc")}

objref pc
pc = new ParallelContext()

proc addcell(){
    cells.append($o1)
    pc.set_gid2node($2, $3)
    nc = cells.object(cells.count()-1).connect2target(nil)
    pc.cell($2, nc)
}

// FIRST LAYER
/* building arc */
//Extesors
//motoneurons
for (i=pc.id; i < nMN; i += pc.nhost){
    addcell(new MNE(i*5), i, pc.id)
}

//excitatory interneurons 
for (i=pc.id+nMN; i < nMN+nInt; i += pc.nhost){
    addcell(new IbE(i-nMN), i, pc.id)
}

//inhibitory interneurons
for (i=pc.id+nMN+nInt; i < nMN+nInt+nInt; i += pc.nhost){
    addcell(new IaE(i-nMN-nInt), i, pc.id)
}

//afferents Ia
for (i=pc.id+nMN+nInt+nInt; i < nMN+nInt+nInt+nAff; i += pc.nhost){
    addcell(new Ia(fr1.get(i-nMN-nInt-nInt)), i, pc.id)
}

//afferents Ib
for (i=pc.id+nMN+nInt+nInt+nAff; i < nMN+nInt+nInt+nAff+nAff; i += pc.nhost){
    addcell(new Ib(1), i, pc.id)   
}

//add renshaw cells
for (i=pc.id+nMN+nInt+nInt+nAff+nAff; i < nMN+nInt+nInt+nAff+nAff+nRC; i += pc.nhost){
    addcell(new RCE(i-nMN-nInt-nInt-nAff-nAff), i, pc.id)   
}

//Flexors
//motoneurons
for (i=pc.id+ncell; i < nMN+ncell; i += pc.nhost){
    addcell(new MNF(i*5-ncell), i, pc.id)
}

//excitatory interneurons 
for (i=pc.id+nMN+ncell; i < nMN+nInt+ncell; i += pc.nhost){
    addcell(new IbF(i-nMN-ncell), i, pc.id)
}

//inhibitory interneurons
for (i=pc.id+nMN+nInt+ncell; i < nMN+nInt+nInt+ncell; i += pc.nhost){
    addcell(new IaF(i-nMN-nInt-ncell), i, pc.id)
}

//afferents Ia
for (i=pc.id+nMN+nInt+nInt+ncell; i < nMN+nInt+nInt+nAff+ncell; i += pc.nhost){
    addcell(new Ia(fr2.get(i-nMN-nInt-nInt-ncell)), i, pc.id)
}

//afferents Ib
for (i=pc.id+nMN+nInt+nInt+nAff+ncell; i < nMN+nInt+nInt+nAff+nAff+ncell; i += pc.nhost){
    addcell(new Ib(1), i, pc.id)
}

//add renshaw cells
for (i=pc.id+nMN+nInt+nInt+nAff+nAff+ncell; i < nMN+nInt+nInt+nAff+nAff+nRC+ncell; i += pc.nhost){
    addcell(new RCF(i-nMN-nInt-nInt-nAff-nAff-ncell), i, pc.id)   
}

/* building interpool */
//Flexors
for (i=pc.id+2*ncell; i < 2*ncell+nSens; i += pc.nhost){
    addcell(new sens0(i-2*ncell), i, pc.id)
}

for (i=pc.id+2*ncell+nSens; i < 2*ncell+nSens+nIP; i += pc.nhost){
    addcell(new IP0(i-2*ncell-nSens), i, pc.id)
}

//Extensors
for (i=pc.id+2*ncell+nSens+nIP; i < 2*ncell+nSens+nSens+nIP; i += pc.nhost){
    addcell(new sens1(i-2*ncell-nSens-nIP), i, pc.id)
}

for (i=pc.id+2*ncell+nSens+nSens+nIP; i < 2*ncell+nSens+nSens+nIP+nIP; i += pc.nhost){
    addcell(new IP1(i-2*ncell-nSens-nSens-nIP), i, pc.id)
}

//add EES
if (pc.id == 0) {
    {addcell(new EES(),(2*ncell+nSens+nSens+nIP+nIP),pc.id)}
}

//add sensory generator
if (pc.id == 0) {
    {addcell(new sensorygen(),(2*ncell+nSens+nSens+nIP+nIP+1),pc.id)}
}

// SECOND LAYER
for (i=pc.id + FLncells; i < FLncells + SLncell*18; i += pc.nhost){
    addcell(new Ex(i - FLncells), i, pc.id)
}

for (i=pc.id+SLncell*18+FLncells; i < FLncells + SLncell*24; i += pc.nhost){
    addcell(new Inh((i - FLncells - 18*SLncell)*2), i, pc.id)
}

{load_file("connections.hoc")}
{load_file("./sessions/3.ses")}
{load_file("./sessions/4.ses")}
//{load_file("recording.hoc")}

